PsychoPy2experiment version="1.78.00"
Settings
  Show mouse = True
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = visualSearch1
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent locations
      Begin Routine:
        targetX = random()-0.5
        targetY = random()-0.5
        distX = random([nDistractors])-0.5
        distY = random([nDistractors])-0.5
      End Routine:
        trials.addData('targetX',targetX)
        trials.addData('targetY',targetY)
    TextComponent distractor
      stopVal [duration (s)] = 10
      pos [set every repeat] = (distX[0], distY[0])
      text = K
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent target
      stopVal [duration (s)] = 10
      pos [set every repeat] = [targetX, targetY]
      text = X
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    MouseComponent mouse
      timeRelativeTo = routine
      stopVal [duration (s)] = 10
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.5
      saveMouseState = final
    CodeComponent restOfDistractors
      Each Frame:
        if target.status==STARTED and continueRoutine:
            for distN in range(1,nDistractors):
                pos = distX[distN], distY[distN]
                distractor.setPos(pos)
                distractor.draw()
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{u'nDistractors': 4},
      {u'nDistractors': 4},
      {u'nDistractors': 8},
      {u'nDistractors': 8},
      {u'nDistractors': 16},
      {u'nDistractors': 16}]
    Routine trial
  LoopTerminator trials
