PsychoPy2experiment version="1.78.00"
Settings
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1920, 1080]
  Full-screen window = False
  Experiment info = {u'Eye Tracker': u'./SMI_iview_std.yaml', u'Participant': u''}
  Save excel file = True
  expName = stroop
  logging level = warning
  Units = pix
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      units = pix
      startVal [time (s)] = 0.5
      letterHeight = 50
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    GratingComponent grating
      opacity = .7
      tex = sin
      mask = circle
      units = pix
      startVal [time (s)] = 0
      sf = 40
      size = [16,16]
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    GratingComponent gaze_cursor
      opacity [set every frame] = $display_gaze
      tex = sin
      color = $[0.004,0.004,1.000]
      mask = circle
      pos [set every frame] = $[x,y]
      units = pix
      startVal [time (s)] = 0.0
      sf = 40
      size = $[20,20]
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.5
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    CodeComponent eye_track_code
      Begin Experiment:
        maintain_fix_pix_boundary=66.0
        eyetracker =False#will change if we get one!

        if expInfo['Eye Tracker']:
            from psychopy.iohub import EventConstants,ioHubConnection,load,Loader
            from psychopy.data import getDateStr
            # Load the specified iohub configuration file converting it to a python dict.
            io_config=load(file(expInfo['Eye Tracker'],'r'), Loader=Loader)

            # Add / Update the session code to be unique. Here we use the psychopy getDateStr() function for session code generation
            session_info=io_config.get('data_store').get('session_info')
            session_info.update(code="S_%s"%(getDateStr()))

            # Create an ioHubConnection instance, which starts the ioHubProcess, and informs it of the requested devices and their configurations.
            io=ioHubConnection(io_config)

            iokeyboard=io.devices.keyboard
            mouse=io.devices.mouse
            if io.getDevice('tracker'):
                eyetracker=io.getDevice('tracker')

                win.winHandle.minimize()
                eyetracker.runSetupProcedure()
                win.winHandle.activate()
                win.winHandle.maximize()
            display_gaze=False
            x,y=0,0
      Each Frame:
        if eyetracker:
            # check for 'g' key press to toggle gaze cursor visibility
            iokeys=iokeyboard.getEvents(EventConstants.KEYBOARD_PRESS)
            for iok in iokeys:
                if iok.key==u'g':
                    display_gaze=not display_gaze
            # get /eye tracker gaze/ position
            gpos=eyetracker.getPosition()
            if type(gpos) in [list,tuple]:
                x,y=gpos
                d=np.sqrt(x**2+y**2)
                if d>maintain_fix_pix_boundary:
                    heldFixation = False #unless otherwise
      Begin Routine:
        if eyetracker:
            heldFixation = True #unless otherwise
            io.clearEvents('all')
            eyetracker.setRecordingState(True)
      End Routine:
        if eyetracker:
            eyetracker.setRecordingState(False)
            #add eye-track data to data file
            trials.addData("heldFixation", heldFixation)
      End Experiment:
        if expInfo['Eye Tracker']:
            eyetracker.setConnectionState(False)
            io.quit()
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      units = pix
      startVal [time (s)] = 0
      letterHeight = 24
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      text:
        OK. Ready?

        Remember:
        1) Stay fixated on the central white dot.
        2) Ignore the word itself; press:
        	- Left for red LETTERS
        	- Down for green LETTERS
        	- Right for blue LETTERS
        	- (Esc will quit)
        3) To toggle gaze position visibility, press 'g'.

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 24
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
    conditions:
      [{u'text': u'red', u'congruent': 1, u'corrAns': 1, u'letterColor': u'red'},
      {u'text': u'red', u'congruent': 0, u'corrAns': 2, u'letterColor': u'green'},
      {u'text': u'green', u'congruent': 1, u'corrAns': 2, u'letterColor': u'green'},
      {u'text': u'green', u'congruent': 0, u'corrAns': 3, u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': 1, u'corrAns': 3, u'letterColor': u'blue'},
      {u'text': u'blue', u'congruent': 0, u'corrAns': 1, u'letterColor': u'red'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
