PsychoPy2experiment version="1.78.00"
Settings
  Show mouse = True
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = visualSearch1
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    MouseComponent myMouse
      timeRelativeTo = routine
      stopVal [duration (s)] = 10
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.5
      saveMouseState = on click
    CodeComponent locations
      Each Frame:
        maskPos = myMouse.getPos()
        print 'pos', maskPos
      Begin Routine:
        targetX = random()-0.5
        targetY = random()-0.5
        distX = random([nDistractors])-0.5
        distY = random([nDistractors])-0.5
      End Routine:
        trials.addData('targetX',targetX)
        trials.addData('targetY',targetY)
    TextComponent distractor
      text = K
      stopVal [duration (s)] = 10
      pos [set every repeat] = (distX[0], distY[0])
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent target
      text = X
      stopVal [duration (s)] = 10
      pos [set every repeat] = [targetX, targetY]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    CodeComponent restOfDistractors
      Each Frame:
        if distractor.status==STARTED:
            for distN in range(1,nDistractors):
                pos = distX[distN], distY[distN]
                distractor.setPos(pos)
                distractor.draw()
    GratingComponent fixationMask
      tex = sin
      color = $[0.2, 0.2, 0.2]
      stopVal [duration (s)] = 10.0
      mask = gauss
      pos [set every frame] = maskPos
      startVal [time (s)] = 0.5
      sf = 0
      size = [1, 1]
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{u'nDistractors': 4},
      {u'nDistractors': 4},
      {u'nDistractors': 8},
      {u'nDistractors': 8},
      {u'nDistractors': 16},
      {u'nDistractors': 16}]
    Routine trial
  LoopTerminator trials
